//Point Transformation - updated March 2019

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator" "LinearInterpolator")
(Metric "AdvancedMattesMutualInformation"  "CorrespondingPointsEuclideanDistanceMetric")
(Metric0Weight 1 1 1) //AMMI
(Metric1Weight 0.5 0.25 0.125) //Points


(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "false" )

(NumberOfResolutions 3)
(FinalGridSpacingInVoxels 30.000000 30.000000 30.000000)

(HowToCombineTransforms "Compose")


(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false")
(ResultImagePixelType "float")
(ResultImageFormat "mhd")
(WriteDiffusionFiles "true")

// Option supported in elastix 4.1:
(UseFastAndLowMemoryVersion "true")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 5000) 

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 64)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1 )
(UseRandomSampleRegion "true")
(SampleRegionSize 100.0 100.0 100.0)
(NumberOfSpatialSamples 20000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 4)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 4)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.6 )
